PsychoPy2experiment version="1.83.04"
Settings
  Show mouse = True
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 600]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = simple_imagined_movement
  Units = use prefs
  Screen = 1
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Routines
  Routine pause
    TextComponent text_2
      text = Pause
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine feedback
    CodeComponent receiveEvent
      Begin Experiment:
        getFeedbackCounter = 0
      Begin Routine:
        feedbackEvt = buffer_newevents("feedback",1000)
        if feedbackEvt is None or len(feedbackEvt)==0:
            feedbackTxt='None'
        else:
            feedbackTxt=str(feedbackEvt[-1].value)
        getFeedbackCounter = getFeedbackCounter + 1
    TextComponent text_5
      text [set every repeat] = "Feedback = " + $feedbackTxt
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine stimulus
    StaticComponent ISI_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent imagination_instruction_2
      text [set every repeat] = $instruction
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent sendEvent_2
      Begin Routine:
        sendEvent("stimulus", str(bodypart))
  Routine feedbackInstructions
    TextComponent text_4
      text = Feedback Phase
      stopVal [duration (s)] = 3600
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine trailStart
    TextComponent text
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $trailtext
    CodeComponent sendEvent
      Begin Routine:
        sendEvent("trailStart", trail)
  Routine stimulusFeedback
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent imagination_instruction
      text [set every repeat] = $instruction
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent sendEvent_3
      Begin Experiment:
        sendFeedbackCounter = 0
      Begin Routine:
        sendEvent("feedbackStimulus" + str(sendFeedbackCounter), "")
        sendFeedbackCounter = 0 + sendFeedbackCounter
  Routine Instructions
    TextComponent text_3
      wrapWidth = 80
      stopVal [duration (s)] = 3600
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Simple Imagined Movement Experiment

        During the trails imagine yourself vigerously shaking the indicated body part (left hand, right hand, left foot or right foot).

        Press <space> to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    CodeComponent connectToBuffer
      Begin Experiment:
        # buffer_bci Handling the requered imports
        import sys,os
        import time
        sys.path.append(os.path.dirname(__file__) + "/../signalProc")
        from bufhelp import *
        import time

        # ************** Set up buffer connection **************
        # set hostname and port of the computer running the fieldtrip buffer.
        hostname='localhost'
        port=1972
        ftc,hdr=connect(hostname,port)
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trails.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trailtext': u' Trail 1', 'trail': 1},
      {'trailtext': u' Trail 2', 'trail': 2}]
    Routine trailStart
    LoopInitiator stimuli loopType="TrialHandler"
      conditionsFile = stimulus_conditions.csv
      loopType = random
      nReps = 1
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      conditions:
        [{'bodypart': u'left_hand', 'instruction': u' Left Hand'},
        {'bodypart': u'right_hand', 'instruction': u' Right Hand'},
        {'bodypart': u'left_foot', 'instruction': u' Left Foot'},
        {'bodypart': u'right_foot', 'instruction': u' Right Foot'}]
      Routine stimulus
    LoopTerminator stimuli
    Routine pause
  LoopTerminator trials
  Routine feedbackInstructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stimulus_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'bodyPart': u'left_hand', 'instruction': u' Left Hand'},
      {'bodyPart': u'right_hand', 'instruction': u' Right Hand'},
      {'bodyPart': u'left_foot', 'instruction': u' Left Foot'},
      {'bodyPart': u'right_foot', 'instruction': u' Right Foot'}]
    Routine stimulusFeedback
    Routine feedback
  LoopTerminator trials_2
